' README
'
' # Configuration (for real-time performance)
' ## Spike 2
' - In "Edit -> "Edit preferences..." -> "Scheduler", set values to (1, 0, 0).
' ## Windows Task Manager
' - In "Details", set priority of "sonview.exe" and "MATLAB.exe" to "Realtime".
'
' # Running
' 1) Open MATLAB, run "OptoCL_run(...)" (or a corresponding script).
' 2) Run this script.
'
' ==============================================================================
#include "seqlib.s2s"       'Default sequencer helpers (eg, vdac32%)

' ------------------------------------------------------------------------------
' Constant definitions
const tLoop := 0.025;       'Update control every 0.005s (200 Hz)
const fs% := 5e3;           'Sampling frequency
const ts := 1.0/fs%;        'Sampling period
const nStep% := 25;         'Number of samples to skip (downsample)

const msPerStep := 0.01;    'Sequencer configuration
const DACscale  := 1;       'Sequencer configuration
const DACoffset := 0;       'Sequencer configuration
const varFreq% := 1;        'Sequencer variable number
var varSize%[2];            'Sequencer variable numbers (array)
var varOffs%[2];            'Sequencer variable numbers (array)
varSize%[0] := 2;           'Sequencer variable number
varOffs%[0] := 3;           'Sequencer variable number
varSize%[1] := 4;           'Sequencer variable number
varOffs%[1] := 5;           'Sequencer variable number

const pathBase$ := "C:\\MPC";                   ' Path for MATLAB IPC files
const pathFileY$ := pathBase$ + "\\" + "y.bin"; ' Path for MATLAB IPC files
const pathFileU$ := pathBase$ + "\\" + "u.bin"; ' Path for MATLAB IPC files
const pathLock$  := pathBase$ + "\\" + "lock";  ' Path for MATLAB IPC files

const chMarker% := 32;      'DigMark channel (for reading sequencer markers)

' ------------------------------------------------------------------------------
' Configuration defaults (initial values)
var ch% := 12;              'Channel to control
var freq := 8;              'Frequency to control
var waitPre := 30;          'Delay before experiment (s)
var waitMPC := 600;         'MPC duration (s)
var waitPos := 270;         'Delay after experiment (s)
var vThres[2];              'Minimum stimulation threshold (array)
vThres[0] := 0.1;           'Minimum stimulation threshold (V)
vThres[1] := 0.1;           'Minimum stimulation threshold (V)
var vppMax[2];              'Maximum stimulation amplitude (array)
vppMax[0] := 1.0;           'Maximum stimulation amplitude (V pk-pk)
vppMax[1] := 1.0;           'Maximum stimulation amplitude (V pk-pk)
var uOL := 0.5;             'Open-loop stimulation amplitude (0-1)
var dacCL% := 1;            'DAC port for closed-loop stimulation
var dacOL% := 0;            'DAC port for open-loop stimulation

' ------------------------------------------------------------------------------
' General state variables
var vSample%;               'View handle of the main time window
var isConfigured%;          'Configuration OK (0 = false)
var isStimOn%;              'Stimulation sequence active (0 = false)
var isMPCReady%;            'MPC active (0 = false)

var chSeqValueU%;           'Values sent to DAC sequencer (control u)
var chReadCount%;           'Number of values read (control u)
var chSampleCount%;         'Number of values sampled (sampled y)
var chWriteCount%;          'Number of values written (sampled y)
var chLoopTime%;            'Time spent in loop (s)
var chStateSav%[5];         'Data channels to save results from memory

const nBuffer% := 1024;
var bufferSample[nBuffer%*nStep%];
var bufferU[nBuffer%];

var vFileL%;
var vFileY%;
var vFileU%;

' ------------------------------------------------------------------------------
' Controller state variables
var tStartMPC, tCur, tLast, tLastRead, y, u;  'set to zero

' ------------------------------------------------------------------------------
' Running sequence state variables
var runStep%, tNextStep;
' Steps:
'  -1: manual mode
'   0: pre
'   1: MPC
'   2: post

' ==============================================================================
' Helper functions

Func Now()
'' Return current time for the selected channel
View(vSample%);
return MaxTime(ch%);
end;


' ------------------------------------------------------------------------------
Func ClearLog%();
' Clear log text
View(LogHandle());
EditSelectAll();
EditClear();

return 1;
end;


' ------------------------------------------------------------------------------
Func SaveLog%();
if (vSample% > 0) then
    View(vSample%);
    var logfilename$ := FileName$(3) + FileName$(4) + "_log.txt";
    View(LogHandle());
    FileSaveAs(logfilename$, -1, 1);
endif;

return 1;
end;


' ------------------------------------------------------------------------------
Func MoveHCursors%(chSrc%, chDst%);
' Move horizontal cursors from chSrc% to chDst%
var i%;
for i% := 1 to 9 do ' Up to 9 horizontal cursors
    if (HCursorExists(i%) and HCursorChan(i%) = chSrc%) then
        var pos := HCursor(i%);
        HCursor(i%, pos, chDst%);
    endif;
next;

return 1;
end;


' ------------------------------------------------------------------------------
Func SaveChannel%(chMem%, chSav%);
' Save memory channels to file, if available

' Check that window and channels exist
if (vSample% = 0 or chMem% = 0) then
    return 0;
endif;

' Create channel if needed
View(vSample%);    
if (chSav% = 0) then
    'List unused channels
    var list%[2];
    ChanList(list%[], 0x80); 
    if list%[0] < 1 then
        PrintLog("Error saving data (not enough channels available)!");
        return -1;
    endif;
    
    ' Store channel number
    chSav% := list%[1];
endif;

' Save data
MemSave(chMem%, chSav%, 0, 1);

' Move reference cursors to new channels
MoveHCursors%(chMem%, chSav%);

' Update UI to signal user that we have saved successfully
ChanHide(chMem%);
ChanShow(chSav%);
YRange(chSav%, YLow(chMem%), YHigh(chMem%));

return chSav%;
end;


' ------------------------------------------------------------------------------
Func Save%();
' Save state variable channels
chStateSav%[0] := SaveChannel%(chSeqValueU%,   chStateSav%[0]);
chStateSav%[1] := SaveChannel%(chReadCount%,   chStateSav%[1]);
chStateSav%[2] := SaveChannel%(chWriteCount%,  chStateSav%[2]);
chStateSav%[3] := SaveChannel%(chSampleCount%, chStateSav%[3]);
chStateSav%[4] := SaveChannel%(chLoopTime%,    chStateSav%[4]);

'Save log
SaveLog%();

return 1;
end;



' ==============================================================================
' Handler functions

Func OptimiseView%();
' Optimize Y range and channel visibility

' If not in a time view, do nothing
if (ViewKind() <> 0) then
    return 1;
endif;

'FIXME: Hide unlabeled channels
'ChanHide(1, 3, 5, 7, 8);

' Optimise Y range of visible channels for entire time range
Optimise(-2, 0);

' Move Stim channel to bottom
'ChanOrder(1,1,10);

return 1;
end;


' ------------------------------------------------------------------------------
Func Configure%();
' Prompt for configurations
DlgCreate("Control parameters");
DlgReal(1, "Controlled frequency", 4, 100);
DlgReal(2, "Pause before experiment (s)", 0, 3600);
DlgReal(3, "Stimulation length (s)", 0, 3600);
DlgReal(4, "DAC0: Minimum stimulation threshold (V)",   0, 5);
DlgReal(5, "DAC0: Stimulation limit (V, peak-to-peak)", 0, 5);
DlgReal(6, "DAC1: Minimum stimulation threshold (V)",   0, 5);
DlgReal(7, "DAC1: Stimulation limit (V, peak-to-peak)", 0, 5);
DlgReal(8, "DAC# for open-loop control",   0, 1);
DlgReal(9, "DAC# for closed-loop control", 0, 1);
DlgReal(10,"Open-loop stimulation amplitude (0-1)", 0, 1);
DlgReal(11,"Channel# for closed-loop control (recording)", 0, 31);
var ret% := DlgShow(freq, waitPre, waitMPC,
                    vThres[0], vppMax[0], vThres[1], vppMax[1],
                    dacOL%, dacCL%, uOL, ch%);
if (ret% = 0) then
    'Dialog canceled
    return 1;
endif;

'TODO: Warn about invalid configurations (eg, vOpenLoop > ulim, vThres+ulim > 5)

isConfigured% := 1;

return 1;
end;

' ------------------------------------------------------------------------------
Func CreateMemoryChannel%(ch%, title$, unit$, comment$, dispMin, dispMax)
'Creates a memory channel with the given parameters

' Do nothing if channel already exists
if (ch% <> 0) then
    return ch%;
endif;

View(vSample%);

'Create a RealMark channel, for variable and precise timing
ch% := MemChan(7, 1);   
if ch% <= 0 then                    'Created OK?
    PrintLog("Error creating '%s' channel (%d)\n", title$, ch%);
    return 0;
endif;

ChanTitle$(ch%, title$);
ChanUnits$(ch%, unit$);
ChanComment$(ch%, comment$);

'Display new channel
ChanShow(ch%);
YRange(ch%, dispMin, dispMax);


return ch%;
end;


' ------------------------------------------------------------------------------
Func Start%();

ClearLog%();

if not isConfigured% then
    Configure%();
endif;

if SampleStatus() = -1 then
    'No sampling window active, start one with the current configuration
    FileNew(0, 3);  'Create sampling window and make it visible
endif;

'FrontView(-1);
vSample% := SampleHandle(0);

'TODO: Verify sampling and sequencer parameters

' Initialize memory channels for state variables
chSeqValueU%   := CreateMemoryChannel%(chSeqValueU%,   "u",        "", "", 0.0, 1.0);
chReadCount%   := CreateMemoryChannel%(chReadCount%,   "read",    "#", "", 0.0, 2.0);
chSampleCount% := CreateMemoryChannel%(chSampleCount%, "sampled", "#", "", 0.0, 2.0*fs%*tLoop);
chWriteCount%  := CreateMemoryChannel%(chWriteCount%,  "written", "#", "", 0.0, 2.0*fs%*tLoop/nStep%);
chLoopTime%    := CreateMemoryChannel%(chLoopTime%,    "loop",    "s", "", 0.0, 2.0*tLoop);

' Initialize sampler sequence
SampleSequencer("CL_seq.pls");

if SampleStatus() = 0 then
    'Sampling window is ready but inactive, start sampling
    SampleStart();  'Start sampling immediately
endif;

' Initialize IPC and lockfile
InitMPC%();

' Show sampling window and memory channels (if hidden)
View(vSample%);
ChanShow(chSeqValueU%);
ChanShow(chReadCount%);
ChanShow(chWriteCount%);
ChanShow(chSampleCount%);
ChanShow(chLoopTime%);

PrintLog("Start: %f\n", Now());

' Initialize toolbar
InitToolbar%();

return 1;
end;


' ------------------------------------------------------------------------------
Func InitMPC%();

' Set current dir (create if non-existent)
FilePathSet(pathBase$, 0, 1);

' Open files for IPC (inter-process communication)
if (isMPCReady% = 0) then
    vFileL% := FileOpen(pathLock$,  9, 1);  'binary, write (new file)
    vFileY% := FileOpen(pathFileY$, 9, 1);  'binary, write (new file)
    vFileU% := FileOpen(pathFileU$, 9, 0);  'binary, read (existing file)
    
    ' Read initial control parameters
    View(vFileU%);
    BReadSize(8, u); '64-bit double
        
    isMPCReady% := 1;
endif;

end;


' ------------------------------------------------------------------------------
Func StopMPC%();

' Check whether MPC is active
if (isMPCReady%) then
    ' Close output file
    View(vFileY%);
    FileClose();
    vFileY% := 0;
    
    ' Close input file
    View(vFileU%);
    FileClose();
    vFileU% := 0;
    
    ' Close and delete lockfile
    View(vFileL%);
    FileClose();
    FileDelete(pathLock$);
    vFileL% := 0;
    
    isMPCReady% := 0;
endif;

end;


' ------------------------------------------------------------------------------
Func UpdateMPC%();

var n%, pos%; 'auxiliary variables

' Read control parameters
View(vFileU%);
n% := BReadSize(8, bufferU); '64-bit double
'PrintLog("Read %d\n", n%);

if (n% > 0) then
    ' Set control parameter
    u := bufferU[n%-1]; 'read last value
endif;

' Update marker channel
UpdateStateCh%(chReadCount%, Now(), n%);

return n%;
end;


' ------------------------------------------------------------------------------
Func UpdateUKF%();

var ret%, pos%, n%; 'auxiliary variables

' Copy channel data to array
View(vSample%);
ret% := ChanData(ch%, bufferSample, tLastRead+ts, tCur);
'PrintLog("Sampled %d\n", ret%);

' Update marker channel
UpdateStateCh%(chSampleCount%, Now(), ret%);

if (ret% >= nStep%) then
    'FIXME: Downsample
    n% := ret%/nStep%;  'truncated
    var i%;
    var bufferY[n%];
    for i% := 0 to (n%-1) do
        bufferY[i%] := bufferSample[(i%+1)*nStep%-1];
    next;
    tLastRead := tLastRead + n%*nStep%*ts;
    
    ' Write array to file
    View(vFileY%);
    BWriteSize(8, bufferY); '64-bit double
    pos% := BSeek(0, 2); 'move to end of file (flush)
endif;

' Update marker channel
UpdateStateCh%(chWriteCount%, Now(), n%);

return 1;
end;


' ------------------------------------------------------------------------------
Func RunMPC%();
' Initialize and start sequencer
tCur := Now();
UpdateSequencer%();
StartStim%();

' Initialize state
Yield(tCur+tLoop - Now());  'wait for marker
tStartMPC := LastTime(chMarker%, Now());
PrintLog("Start MPC: %f\n", tStartMPC);
tLast := tStartMPC;
tLastRead := tLast;

' Run main loop
var nLoops% := Ceil(waitMPC/tLoop);
var i%;
for i% := 1 to nLoops% do
    tCur := tStartMPC + i%*tLoop;
    
    ' Sleep (no wait if negative)
    Yield(tCur - Now());

    ' Break if sampling is interrupted
    if (SampleStatus() <> 2) then
        break;
    endif;
    
    ' Write sampled values
    UpdateUKF%();
    
    ' Read control action
    var ret% := UpdateMPC%();
    if (ret%) then
        UpdateSequencer%();
    endif;
    
    ' Update state variables
    var tSpent := (Now() - tCur);
    UpdateStateCh%(chLoopTime%, tCur, tSpent);
    if (tSpent > tLoop) then
        PrintLog("Exceeded loop time! (tCur: %f): %f\n", tCur, tSpent);
    endif;
    
    ' Continue with next loop
    tLast := tCur;
    tCur := tCur + tLoop;
    
next;

PrintLog("Stop MPC (tLast: %f): %f\n", tLast, Now());

' Clear IPC and lockfile
StopMPC%();

return 1;
end;


' ------------------------------------------------------------------------------
Func UpdateStateCh%(ch%, t, value);
View(vSample%);
var buffer[1]; buffer[0] := value;
MemSetItem(ch%, 0, t, 1, buffer);
end;


' ------------------------------------------------------------------------------
Func StartStim%();
' Send start sampler sequence
SampleKey("S");

' Set stimulation state
isStimOn% := 1;

' Update toolbar
UpdateToolbar%();
return 1;
end;


' ------------------------------------------------------------------------------
Func StopStim%();
' Finalize sampler sequence
SampleKey("Q");

' Reset stimulation state
isStimOn% := 0;

' Update toolbar
UpdateToolbar%();
return 1;
end;


' ------------------------------------------------------------------------------
Func Stop%();
' Stop stimulation
StopStim%();

'FIXME: Stop MPC (if running)
StopMPC%();

' Save data
Save%();

' Update toolbar
UpdateToolbar%();
return 1;
end;


' ------------------------------------------------------------------------------
Func Quit%();
' Stop sampling and quit toolbar
Stop%();
SampleStop();
return 0;
end;


' ------------------------------------------------------------------------------
Func UpdateSequencer%();
' Update sequencer variables
SampleSeqVar(varFreq%, vHz%(freq, msPerStep));
var amp;

'CL amp
amp := 0.5 * u*vppMax[dacCL%];
SampleSeqVar(varSize%[dacCL%], vSz%(amp, DACscale));
SampleSeqVar(varOffs%[dacCL%], vDAC32%(vThres[dacCL%] + amp, DACscale, DACoffset));

'OL amp
amp := 0.5*uOL*vppMax[dacOL%];
SampleSeqVar(varSize%[dacOL%], vSz%(amp, DACscale));
SampleSeqVar(varOffs%[dacOL%], vDAC32%(vThres[dacOL%] + amp, DACscale, DACoffset));

' Update data and marker channels
UpdateStateCh%(chSeqValueU%, Now(), u);

return 1;
end;


' ------------------------------------------------------------------------------
Func UpdateToolbar%();
' Enables/disables toolbar buttons according to current state
'ToolbarEnable(3, (not isActive%)); 'Run MPC

return 1;
end;


' ------------------------------------------------------------------------------
Func Idle%()
' Update running sequence
if (Now() >= tNextStep) then
    docase
    case runStep% = 0 then
        ' pre
        tNextStep := tNextStep + waitPre;
        runStep% := 1;
        
    case runStep% = 1 then
        ' MPC
        RunMPC%();
        ' OL
        'u := 0.3341;
        'UpdateSequencer%();
        'StartStim%();
        tNextStep := tNextStep + waitMPC;
        runStep% := 2;
        
    case runStep% = 2 then
        ' post
        StopStim%();
        tNextStep := tNextStep + waitPos;
        runStep% := 3;
        
    case runStep% = 3 then
        ' end
        Quit%();
        return 0;
        
    endcase;
endif;

' Keep script running
return 1;
end;


' ------------------------------------------------------------------------------
Func InitToolbar%()
' Initialize toolbar with idle function

ToolbarSet(5, "Optimise view", OptimiseView%);
ToolbarSet(4, "Configure", Configure%);
ToolbarSet(3, "Start MPC", RunMPC%);
ToolbarSet(2, "Stop", Stop%);
ToolbarSet(1, "Quit", Quit%);
ToolbarSet(0, "Idle", Idle%);

Toolbar("MPC", 0x03FF);      'Display toolbar, allow all user actions

' Update button status
UpdateToolbar%();

end;
